opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: GoldenGateAssembly_v1.0
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  Reservoir Well: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  Destination Plate: {definitionId: opentrons/opentrons_96_aluminumblock_nest_wellplate_100ul/1, location: 3}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Golden Gate Enzyme Mix
  - Deionized H20
  - DNA Fragment 1
  - DNA Fragment 2
  - Destination Plasmid
  - T4 DNA Ligase Buffer
ingredLocations:
  Reservoir Well:
    Golden Gate Enzyme Mix {volume: 5000}: A1
    Deionized H20 {volume: 5000}: A2
    DNA Fragment 1 {volume: 5000}: A3
    DNA Fragment 2 {volume: 5000}: A4
    Destination Plasmid {volume: 5000}: A5
    T4 DNA Ligase Buffer {volume: 5000}: A6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A1
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 15
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A2
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A3
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A4
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A5
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reservoir Well
  aspirate_wells: A6
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: mix
  stepName: mix
  pipette: p20_single_gen2
  volume: 10
  times: 5
  changeTip: always
  labware: Destination Plate
  wells: A1-H1
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  mix_mmFromBottom: 0.5
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 20
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Incubation step 1, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Incubation step 2, temperature: 60, durationMinutes: 5}
  blockIsActiveHold: false
  lidIsActiveHold: false
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: Reservoir Well, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 1, labwareId: Destination Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- dropTip: {pipetteId: p20_single_gen2, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: B1}
- aspirate: {pipetteId: p20_single_gen2, volume: 1, labwareId: Reservoir Well, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
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