opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: GoldenGateAssembly_v2.0
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p50_single: {mount: right}
modules:
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  NEST 96 Well Plate 100 uL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  NEST 96 Deep Well Plate 2 mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, location: 4}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p50_single: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Golden Gate Enzyme Mix
  - Nuclease-free H2O
  - Destination Plasmid
  - T4 DNA Ligase Buffer
  - DNA Fragment 1
  - DNA Fragment 2
ingredLocations:
  NEST 96 Deep Well Plate 2 mL:
    Nuclease-free H2O {volume: 1000}: A1
    T4 DNA Ligase Buffer {volume: 40}: A2
    Destination Plasmid {volume: 30}: A3
    DNA Fragment 1 {volume: 20}: A4
    DNA Fragment 2 {volume: 20}: A5
    Golden Gate Enzyme Mix {volume: 20}: A6
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 28
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 32
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1, A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A3
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1, A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A4
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A5
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2 mL
  aspirate_wells: A6
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  dispense_labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  dispense_wells: A1-H1, A2
- stepType: mix
  stepName: mix
  pipette: p50_single
  volume: 30
  times: 5
  changeTip: always
  labware: NEST 96 Well Plate 100 uL PCR Full Skirt
  wells: A1-H1, A2
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  mix_mmFromBottom: 0.5
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 20
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Incubate 1, temperature: 37, durationMinutes: 60, durationSeconds: 0}
    - {type: profileStep, title: Incubate 2, temperature: 60, durationMinutes: 5, durationSeconds: 0}
  blockIsActiveHold: false
  lidIsActiveHold: false
labwareDefinitions:
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p50_single, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p50_single, volume: 28, labwareId: NEST 96 Deep Well Plate 2 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 25}
- dispense: {pipetteId: p50_single, volume: 28, labwareId: NEST 96 Well Plate 100 uL PCR Full Skirt, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 50}
- dropTip: {pipetteId: p50_single, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p50_single, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: B1}
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