opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Gibson_v2
description: Added negative controls
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  Destination Plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  Reagents Wells: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, location: 4}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Gibson Assembly Master Mix
  - Deionized H2O
  - Fragment 1: {description: First fragment to be assembled}
  - Fragment 2: {description: Second fragment to be assembled}
ingredLocations:
  Reagents Wells:
    Gibson Assembly Master Mix {volume: 1000}: A1
    Deionized H2O {volume: 1000}: A2
    Fragment 1 {volume: 40}: A3
    Fragment 2 {volume: 40}: A4
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 4
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 16
  path: single
  changeTip: always
  aspirate_labware: Reagents Wells
  aspirate_wells: A2
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1, A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Reagents Wells
  aspirate_wells: A2
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  dispense_labware: Destination Plate
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Reagents Wells
  aspirate_wells: A1
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents Wells
  aspirate_wells: A3
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1, A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents Wells
  aspirate_wells: A4
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1, A2-H2
- stepType: mix
  stepName: mix
  pipette: p20_single_gen2
  volume: 20
  times: 5
  changeTip: always
  labware: Destination Plate
  wells: A1-H1, A2-H2
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  mix_mmFromBottom: 0.5
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 20
  profileTargetLidTemp: 50
  orderedProfileItems:
    - {type: profileStep, title: Incubation step 1, temperature: 50, durationMinutes: 15}
  blockIsActiveHold: false
  lidIsActiveHold: false
labwareDefinitions:
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- thermocycler/setTargetBlockTemperature: {moduleId: thermocyclerModuleV1, celsius: 4}
- thermocycler/waitForBlockTemperature: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 16, labwareId: Reagents Wells, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 16, labwareId: Destination Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
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