opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: GoldenGateAssembly_v2.2
description: Changed negative control to omit Golden Gate Enzyme Mix instead of DNA Fragments
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
modules:
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  NEST 96 Deep Well Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, location: 4}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Nuclease-free H2O
  - T4 DNA Ligase Buffer
  - Destination Plasmid
  - DNA Fragment 1
  - DNA Fragment 2
  - Golden Gate Enzyme Mix
ingredLocations:
  NEST 96 Deep Well Plate 2mL:
    Nuclease-free H2O {volume: 1000}: A1
    T4 DNA Ligase Buffer {volume: 80}: A2
    Destination Plasmid {volume: 40}: A3
    DNA Fragment 1 {volume: 40}: A4
    DNA Fragment 2 {volume: 40}: A5
    Golden Gate Enzyme Mix {volume: 40}: A6
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A3
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A3
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A4
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A4
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A5
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A5
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A6
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-H2
- stepType: mix
  stepName: mix
  pipette: p20_single_gen2
  volume: 20
  times: 5
  changeTip: always
  labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A1-H1, A2-H2
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  mix_mmFromBottom: 0.5
labwareDefinitions:
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: NEST 96 Deep Well Plate 2mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- dropTip: {pipetteId: p20_single_gen2, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: B1}
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