opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Gibson_v1
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
modules:
  temperatureModuleV1: {location: 3}
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 1}
  Reagents: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  Destination Plate: {definitionId: opentrons/opentrons_96_aluminumblock_nest_wellplate_100ul/1, location: temperatureModuleV1}
  Incubation: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Gibson Assembly Master Mix
  - Deionized H2O
  - Fragment 1: {description: First fragment to be assembled}
  - Fragment 2: {description: Second fragment to be assembled}
ingredLocations:
  Reagents:
    Gibson Assembly Master Mix {volume: 5000}: A1
    Deionized H2O {volume: 5000}: A2
    Fragment 1 {volume: 5000}: A3
    Fragment 2 {volume: 5000}: A4
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV1
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV1
  pauseAction: untilTemperature
  pauseTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: Destination Plate
  dispense_wells: A1-H1
- stepType: mix
  stepName: mix
  pipette: p20_single_gen2
  volume: 10
  times: 5
  changeTip: always
  labware: Destination Plate
  wells: A1-H1
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  mix_mmFromBottom: 0.5
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 20
  profileTargetLidTemp: 50
  orderedProfileItems:
    - {type: profileStep, title: Incubation step 1, temperature: 50, durationMinutes: 15}
  blockIsActiveHold: false
  lidIsActiveHold: false
labwareDefinitions:
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV1, celsius: 4}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV1, celsius: 4}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 10, labwareId: Reagents, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 10, labwareId: Destination Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- dropTip: {pipetteId: p20_single_gen2, labwareId: Trash, wellName: A1}
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